PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = VirtualInfluencersEEG
  keyboardBackend = ioHub
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Routines
  Routine LSL
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        from psychopy import parallel
        parallel.setPortAddress(61432) #61432
    KeyboardComponent EndIntro
      allowedKeys = 'z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine Ende
    TextComponent text
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Das Experiment ist beendet.
        Sagen Sie der Versuchsleitung Bescheid.
  Routine StartExperiment
    TextComponent StartNachricht1
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text = Press START to begin with the experiment.
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    KeyboardComponent Start
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Fixation
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        jitter = np.arange(2, 3, .25)
        shuffle(jitter)
      Begin Routine:
        jitter = np.arange(3.5, 4.5, .25)
        shuffle(jitter)
    PolygonComponent FixationCross
      fillColor = $[1,1,1]
      shape = cross
      size = (0.02, 0.02)
      stopVal [duration (s)] = $jitter[0]
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  Routine conditions1
    CodeComponent SendTrigger
      Code Type = Py
      Begin Routine:
        parallel.setData(int(marker))
    ImageComponent WebsiteImg
      image [set every repeat] = $image
      size = (0.55, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.0
      texture resolution = 512
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    TextComponent Frage
      durationEstim = 2.0
      letterHeight = 0.06
      pos = (0, 0.1)
      startVal [time (s)] = 2.0
      text [set every repeat] = $question
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    RatingScaleComponent RatingBlau
      durationEstim = 2.0
      forceEndRoutine = True
      high = 5
      low = 1
      markerStart = 3
      pos = 0, -0.4
      showAccept = False
      singleClick = True
      size = 1
      startVal [time (s)] = 2.0
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      customize_everything:
        low=1,
        high=5,
        scale='(Totally disagree)''(Totally agree)',
        labels=['Totally disagree','','','','Totally agree'],
        singleClick=True,
        marker='triangle',
        markerStart=3,
        noMouse=True,
        respKeys=['c','v','b','n','m']
Flow
  Routine LSL
  Routine StartExperiment
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'marker': 1, 'half': 1, 'image': 'Stimuli/HI_adhel_bol.png', 'question': 'I think the shown influencer is trustworthy.', 'construct': 'trust'},
      {'marker': 1, 'half': 1, 'image': 'Stimuli/HI_chiaraferragni.png', 'question': 'I think the shown influencer is trustworthy.', 'construct': 'trust'},
      {'marker': 1, 'half': 1, 'image': 'Stimuli/HI_emilycanham.png', 'question': 'I think the shown influencer is trustworthy.', 'construct': 'trust'},
      {'marker': 1, 'half': 1, 'image': 'Stimuli/HI_flaviapavanelli.png', 'question': 'I think the shown influencer is trustworthy.', 'construct': 'trust'},
      {'marker': 1, 'half': 1, 'image': 'Stimuli/HI_imjennim.png', 'question': 'I think the shown influencer is trustworthy.', 'construct': 'trust'},
      {'marker': 1, 'half': 1, 'image': 'Stimuli/HI_jenndeugikim.png', 'question': 'I think the shown influencer is trustworthy.', 'construct': 'trust'},
      {'marker': 1, 'half': 1, 'image': 'Stimuli/HI_jihye.png', 'question': 'I think the shown influencer is trustworthy.', 'construct': 'trust'},
      {'marker': 1, 'half': 1, 'image': 'Stimuli/HI_lamise.png', 'question': 'I think the shown influencer is trustworthy.', 'construct': 'trust'},
      {'marker': 1, 'half': 1, 'image': 'Stimuli/HI_rosesarerosie.png', 'question': 'I think the shown influencer is trustworthy.', 'construct': 'trust'},
      {'marker': 1, 'half': 1, 'image': 'Stimuli/HI_simoneses.png', 'question': 'I think the shown influencer is trustworthy.', 'construct': 'trust'}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
    Routine conditions1
    Routine Fixation
  LoopTerminator trials
  Routine Ende
